CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does startwith "6-1")
    Name to assign these images:OrigColor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "PlateTemplate")
    Name to assign these images:PlateTemplate
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:OrigColor
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigBlue
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigGreen
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:OrigRed
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:OrigBlue
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Select the input image:OrigGreen
    Name the output image:CorrGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract
    Select the input image:OrigRed
    Name the output image:CorrRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:10|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:0.5
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CombinedImage
    Image or measurement?:Image
    Select the first image:CorrBlue
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CorrGreen
    Multiply the second image by:1.0
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
Align:[module_num:11|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:PlateTemplate
    Name the first output image:AlignedPlate
    Select the second input image:CorrRed
    Name the second output image:AlignedRed
    Select the additional image:CombinedImage
    Name the output image:AlignedCombined
    Select how the alignment is to be applied:Similarly

MaskImage:[module_num:12|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
    Select the input image:AlignedRed
    Name the output image:MaskedRedPlate
    Use objects or an image as a mask?:Image
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    Select image for mask:PlateTemplate
    Invert the mask?:No

MaskImage:[module_num:13|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
    Select the input image:AlignedCombined
    Name the output image:MaskedCombined
    Use objects or an image as a mask?:Image
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    Select image for mask:PlateTemplate
    Invert the mask?:No

ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:SubtractedRed
    Image or measurement?:Image
    Select the first image:AlignedRed
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:AlignedCombined
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:15|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notes:['Identify all yeast colonies (white and red) within the plate. Use the red channel image, since both red and white colonies are bright in this image. Adjust the min/max diameter depending on the expected colony size in your own images.']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
    Select the input image:MaskedRedPlate
    Name the primary objects to be identified:Colonies
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectIntensity:[module_num:16|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notes:['Measure the intensity of each colony in the SubtractedRed image.']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
    Select images to measure:SubtractedRed
    Select objects to measure:Colonies

MeasureObjectSizeShape:[module_num:17|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notes:['Measure area and shape features of each colony.']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
    Select object sets to measure:Colonies
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ClassifyObjects:[module_num:18|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notes:['Classify each colony for the desired parameters.First, based on area in a histogram with three bins to distinguish tiny, small, and large colonies. Second, by intensity  into two bins, for distinguishing white and red colonies.']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
    Make classification decision based on:Single measurement
    Hidden:2
    Hidden:1
    Select the object to be classified:Colonies
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Custom-defined bins
    Number of bins:1
    Lower threshold:0
    Use a bin for objects below the threshold?:No
    Upper threshold:1
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,5,75,1300
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Tiny,Small,Large
    Retain an image of the classified objects?:No
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    Select the object to be classified:Colonies
    Select the measurement to classify by:Intensity_MeanIntensity_SubtractedRed
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.05
    Give each bin a name?:Yes
    Enter the bin names separated by commas:White,Red
    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
    Select the object name:Colonies
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
    Use custom names for the bins?:No
    Enter the low-low bin name:LowLow
    Enter the low-high bin name:HighLow
    Enter the high-low bin name:LowHigh
    Enter the high-high bin name:HighHigh
    Retain an image of the classified objects?:No
    Enter the image name:ClassifiedNuclei
    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Output Folder|None
    Rules or classifier file name:None
    Allow fuzzy feature matching?:No

OverlayOutlines:[module_num:19|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notes:['Overlay the colony outlines upon the MaskedRedPlate image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MaskedRedPlate
    Name the output image:OutlinedColonies
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Colonies

SaveImages:[module_num:20|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notes:["Save the outline overlay image as an 8-bit TIF, using the same name as the original image, plus '_outlines' as a suffix. Save the image to the default output folder."]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
    Select the type of image to save:Image
    Select the image to save:OutlinedColonies
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigColor
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:21|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the colony objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Colonies
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
